PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = emotionresearch
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $prime
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    ImageComponent image_2
      image [set every repeat] = $test
      size = (0.5, 0.5)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.3
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "positive", "neutral", "negative"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.5
      styles = choice
      ticks = (1, 2, 3)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/research/conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'prime': 'C:\\research\\87.jpg', 'test': 'C:\\research\\1.jpg'},
      {'prime': 'C:\\research\\88.jpg', 'test': 'C:\\research\\2.jpg'},
      {'prime': 'C:\\research\\89.jpg', 'test': 'C:\\research\\3.jpg'},
      {'prime': 'C:\\research\\90.jpg', 'test': 'C:\\research\\4.jpg'},
      {'prime': 'C:\\research\\91.jpg', 'test': 'C:\\research\\5.jpg'},
      {'prime': 'C:\\research\\92.jpg', 'test': 'C:\\research\\6.jpg'},
      {'prime': 'C:\\research\\87.jpg', 'test': 'C:\\research\\7.jpg'},
      {'prime': 'C:\\research\\88.jpg', 'test': 'C:\\research\\8.jpg'},
      {'prime': 'C:\\research\\89.jpg', 'test': 'C:\\research\\9.jpg'},
      {'prime': 'C:\\research\\90.jpg', 'test': 'C:\\research\\10.jpg'},
      {'prime': 'C:\\research\\91.jpg', 'test': 'C:\\research\\11.jpg'},
      {'prime': 'C:\\research\\92.jpg', 'test': 'C:\\research\\12.jpg'},
      {'prime': 'C:\\research\\87.jpg', 'test': 'C:\\research\\13.jpg'},
      {'prime': 'C:\\research\\88.jpg', 'test': 'C:\\research\\14.jpg'},
      {'prime': 'C:\\research\\89.jpg', 'test': 'C:\\research\\15.jpg'},
      {'prime': 'C:\\research\\90.jpg', 'test': 'C:\\research\\16.jpg'},
      {'prime': 'C:\\research\\91.jpg', 'test': 'C:\\research\\17.jpg'},
      {'prime': 'C:\\research\\92.jpg', 'test': 'C:\\research\\18.jpg'},
      {'prime': 'C:\\research\\87.jpg', 'test': 'C:\\research\\19.jpg'},
      {'prime': 'C:\\research\\88.jpg', 'test': 'C:\\research\\20.jpg'},
      {'prime': 'C:\\research\\89.jpg', 'test': 'C:\\research\\21.jpg'},
      {'prime': 'C:\\research\\90.jpg', 'test': 'C:\\research\\22.jpg'},
      {'prime': 'C:\\research\\91.jpg', 'test': 'C:\\research\\23.jpg'}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
    Routine trial
  LoopTerminator trials
